PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = MyMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = SOLO PROJECT
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial_routine
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.03
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    KeyboardComponent key_resp_2
      allowedKeys = 'm','n'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 1.03
      storeCorrect = True
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    ImageComponent stimulusImage
      image [set every repeat] = $stimImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.03
      stopVal [duration (s)] = 1.0
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  Routine intro
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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      text:
        Hello!

        You will be presented with a series of images after this screen. Press "M" if the objects in the image are animate and "N" if they are inanimate. Try to respond as accurately as possible.

        Thank you so much for your participation!
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = solo proj_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('StimObject', 'rock'), ('stimImage', 'images_soloproj\\rock_img.jpg'), ('StimCatergory', 'inanimate'), ('correctAns', 'n')]),
      OrderedDict([('StimObject', 'cube'), ('stimImage', 'images_soloproj\\cube_img.jpg'), ('StimCatergory', 'inanimate'), ('correctAns', 'n')]),
      OrderedDict([('StimObject', 'dog'), ('stimImage', 'images_soloproj\\doggo_img.jpg'), ('StimCatergory', 'animate'), ('correctAns', 'm')]),
      OrderedDict([('StimObject', 'shoe'), ('stimImage', 'images_soloproj\\shoe_img.jpg'), ('StimCatergory', 'inanimate'), ('correctAns', 'n')]),
      OrderedDict([('StimObject', 'truck'), ('stimImage', 'images_soloproj\\truckkun_img.jpg'), ('StimCatergory', 'inanimate'), ('correctAns', 'n')]),
      OrderedDict([('StimObject', 'broom'), ('stimImage', 'images_soloproj\\broom_img.jpg'), ('StimCatergory', 'inanimate'), ('correctAns', 'n')]),
      OrderedDict([('StimObject', 'man'), ('stimImage', 'images_soloproj\\man_desert.jpg'), ('StimCatergory', 'animate'), ('correctAns', 'm')]),
      OrderedDict([('StimObject', 'grasshopper'), ('stimImage', 'images_soloproj\\grasshopper_img.jpg'), ('StimCatergory', 'animate'), ('correctAns', 'm')]),
      OrderedDict([('StimObject', 'cow'), ('stimImage', 'images_soloproj\\cow_img.jpg'), ('StimCatergory', 'animate'), ('correctAns', 'm')]),
      OrderedDict([('StimObject', 'butterfly'), ('stimImage', 'images_soloproj\\butterfly_img.jpg'), ('StimCatergory', 'animate'), ('correctAns', 'm')])]
    Routine trial_routine
  LoopTerminator trials
